/*----------------------------------------------------------------
%W%  %G%
ctty118e.asc  translated Tue Dec 17 10:28:21 1996 by ntscable 2.0
source file syntax: Eutectic
output file syntax: CABLE
soma: diameter = 10.0751 um  length = 23.0005 um  area = 728.008 um2
      16 three-D points; 19 outline points numbered 1-19
      outline diameter = 15.7266 um
4 primary neurites
42 branches totaling 1395.32 um in length, 2191.11 um2 in area
568 tree points translated to 52 segments (1 requested)
Neurites divided into segments of equal dx between adjacent digitized
branch points.
Segment length constrained to be < 10 um.
No. points    587
No. trees       5
Text  T11118EO, HRP and DAB, 2/3/89                                                                                           

----------------------------------------------------------------*/
					/* create sections */
create    soma[1],\
          dend1[3],\
          dend2[3],\
          dend3[1],\
          dend4[13]



/*----------------------------------------------------------------*/
proc geometry() { local i, j

						/* soma[0] geometry */
    soma[0] {
        nseg = 1
        pt3dclear()
        for j = 1, fscan() {
            pt3dadd(fscan(),fscan(),fscan(),fscan())
        }
    }

					/* connect primary neurites */
    soma[0] connect dend1[0] (0), 0.5
    soma[0] connect dend2[0] (0), 0.5
    soma[0] connect dend3[0] (0), 0.5
    soma[0] connect dend4[0] (0), 0.5


					/* neurite geometry*/
    for i = 0,2 {
        dend1[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,2 {
        dend2[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,0 {
        dend3[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,12 {
        dend4[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }



					/* branching topology*/
    for i = 1,2 {
        dend1[fscan()] connect dend1[i] (0), fscan()
    }

    for i = 1,2 {
        dend2[fscan()] connect dend2[i] (0), fscan()
    }

    for i = 1,0 {
        dend3[fscan()] connect dend3[i] (0), fscan()
    }

    for i = 1,12 {
        dend4[fscan()] connect dend4[i] (0), fscan()
    }

}

geometry()


SOMA COORDINATES AND DIAMETERS:

    16
      -9        3      1.5        0
      -8   2.6667   1.6667     3.35
    -7.5     1.75      1.5   6.5765
    -7.5     -0.5     1.25   11.102
    -5.5  -1.5714  0.67857   14.861
      -4  -1.0357     0.25    15.08
      -2   -0.625     0.25   14.758
       0 -0.055556     0.25    14.12
     2.5   0.1875     0.25   12.385
       4      0.6     0.25   10.812
       5    0.625    0.375   9.2534
       6  0.66667  0.41667   7.6685
     7.5   1.0417 0.041667   5.9173
     7.5  0.29167  0.29167   4.4363
       8    -0.25        0      2.5
       8     -1.5        0        0


NEURITE COORDINATES AND DIAMETERS:

    4 11
       8      2.5      0.5      0.7
      10        4      0.5      0.7
      12      5.5        3      0.7
      16        7      3.5      0.7
      20        9      4.5      0.7
      21     10.5        5      0.7
    23.5     10.5      4.5      0.4
      28     11.5        5      0.4
      30       13        4      0.5
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     -81       47     10.5      0.1


CONNECTIONS:
        0    1
        0    1

        0    1
        0    1


        0    1
        0    1
        2    1
        2    1
        4    1
        4    1
        6    1
        6    1
        8    1
        8    1
       10    1
       10    1


/*----------------------------------------------------------------*/
proc geometry() { 

	/* NULL geometry procedure: keeps the user from
	calling the geometry procedure in isolation. */

    printf("\nYou must re-read the entire geometry\n")
    printf("file to execute geometry().\n\n")
}

