/*----------------------------------------------------------------
%W%  %G%
ctty238d.asc  translated Tue Dec 17 10:28:22 1996 by ntscable 2.0
source file syntax: Eutectic
output file syntax: CABLE
soma: diameter = 12.0113 um  length = 26.1734 um  area = 987.649 um2
      10 three-D points; 13 outline points numbered 1-13
      outline diameter = 19.4011 um
3 primary neurites
34 branches totaling 1341.7 um in length, 2146.68 um2 in area
322 tree points translated to 76 segments (1 requested)
Neurites divided into segments of equal dx between adjacent digitized
branch points.
Segment length constrained to be < 10 um.
No. points    335
No. trees       4
Text  T11238DO, HRP and DAB, 2/9/89                                                                                           

----------------------------------------------------------------*/
					/* create sections */
create    soma[1],\
          dend1[1],\
          dend2[26],\
          dend3[1]



/*----------------------------------------------------------------*/
proc geometry() { local i, j

						/* soma[0] geometry */
    soma[0] {
        nseg = 1
        pt3dclear()
        for j = 1, fscan() {
            pt3dadd(fscan(),fscan(),fscan(),fscan())
        }
    }

					/* connect primary neurites */
    soma[0] connect dend1[0] (0), 0.5
    soma[0] connect dend2[0] (0), 0.5
    soma[0] connect dend3[0] (0), 0.5


					/* neurite geometry*/
    for i = 0,0 {
        dend1[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,25 {
        dend2[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,0 {
        dend3[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }



					/* branching topology*/
    for i = 1,0 {
        dend1[fscan()] connect dend1[i] (0), fscan()
    }

    for i = 1,25 {
        dend2[fscan()] connect dend2[i] (0), fscan()
    }

    for i = 1,0 {
        dend3[fscan()] connect dend3[i] (0), fscan()
    }

}

geometry()


SOMA COORDINATES AND DIAMETERS:

    10
     -15       -1        3        0
   -11.5    -1.35    1.525   6.5949
     -10   -1.125    0.875   8.6963
    -8.5 -0.88636  0.61364   10.596
    -4.5    -0.25     0.25    15.89
    -0.5      0.5     -0.5   21.024
     3.5     0.25     -0.7   17.556
     4.5  0.54545 -0.88636   15.956
       7  0.15909  -1.2273   9.6972
       9     -2.5     -1.5        0


NEURITE COORDINATES AND DIAMETERS:

    1 2
   -13.5     -1.5        2        6
     -16     -0.5        2      5.4

    2 3
     8.5        4       -1      4.7
      13        5      1.5      3.1
    16.5       10      6.5        4

    1 3
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    -1.5    -22.5      5.5      0.1


CONNECTIONS:

        0    1
        1    1
        2    1
        3    1
        4    1
        4    1
        6    1
        6    1
        3    1
        9    1
       10    1
       10    1
        9    1
        2    1
       14    1
       14    1
        1    1
       17    1
       18    1
       18    1
       17    1
       21    1
       21    1
        0    1
       24    1



/*----------------------------------------------------------------*/
proc geometry() { 

	/* NULL geometry procedure: keeps the user from
	calling the geometry procedure in isolation. */

    printf("\nYou must re-read the entire geometry\n")
    printf("file to execute geometry().\n\n")
}

