/*----------------------------------------------------------------
%W%  %G%
ctt1209b.asc  translated Mon Dec 16 17:00:22 1996 by ntscable 2.0
source file syntax: Eutectic
output file syntax: CABLE
soma: diameter = 9.93713 um  length = 20.2765 um  area = 632.999 um2
      16 three-D points; 19 outline points numbered 1-19
      outline diameter = 13.4639 um
2 primary neurites
9 branches totaling 334.312 um in length, 533.958 um2 in area
97 tree points translated to 42 segments (1 requested)
Neurites divided into segments of equal dx between adjacent digitized
branch points.
Segment length constrained to be < 10 um.
No. points    116
No. trees       3
Text  T01209BO,retrograde HRP, silver enhanced, 1/27/89                                                                       

----------------------------------------------------------------*/
					/* create sections */
create    soma[1],\
          dend1[7],\
          dend2[9]



/*----------------------------------------------------------------*/
proc geometry() { local i, j

						/* soma[0] geometry */
    soma[0] {
        nseg = 1
        pt3dclear()
        for j = 1, fscan() {
            pt3dadd(fscan(),fscan(),fscan(),fscan())
        }
    }

					/* connect primary neurites */
    soma[0] connect dend1[0] (0), 0.5
    soma[0] connect dend2[0] (0), 0.5


					/* neurite geometry*/
    for i = 0,6 {
        dend1[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }

    for i = 0,8 {
        dend2[i] {
            nseg = fscan()
            pt3dclear()
            for j = 1, fscan() {
                pt3dadd(fscan(),fscan(),fscan(),fscan())
            }
        }
    }



					/* branching topology*/
    for i = 1,6 {
        dend1[fscan()] connect dend1[i] (0), fscan()
    }

    for i = 1,8 {
        dend2[fscan()] connect dend2[i] (0), fscan()
    }

}

geometry()


SOMA COORDINATES AND DIAMETERS:

    16
    -6.5       -2       -3        0
      -6    -2.25   -2.375   3.5089
    -5.5  -1.8333       -2   5.7542
    -4.5     -1.5       -2   9.0554
      -4    -1.75       -2   11.543
      -3    -1.25   -1.125   13.521
      -2     -0.8    -0.75   15.672
    -0.5  -1.1429 -0.53571   16.825
       1 -0.28571 -0.82143    15.79
     1.5    0.375    -0.25   14.468
       2   1.0357  0.32143   13.174
       3   1.8571  0.46429   11.872
     4.5   3.2143  0.92857   9.6097
       5        5      1.5   6.0828
     5.5     6.25     2.25   3.5355
       7        8        2        0


NEURITE COORDINATES AND DIAMETERS:

    1 3
     6.5      8.5        3      0.6
     9.5       11      4.5      0.6
      13     12.5      4.5      0.6

    1 4
      13     12.5      4.5      0.6
    15.5     14.5        6      0.5
    17.5       15        6      0.5
      19       15      7.5      0.7
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       9    -61.5       21      0.4


CONNECTIONS:
        0    1
        1    1
        1    1
        0    1
        4    1
        4    1

        0    1
        1    1
        1    1
        0    1
        4    1
        5    1
        5    1
        4    1


/*----------------------------------------------------------------*/
proc geometry() { 

	/* NULL geometry procedure: keeps the user from
	calling the geometry procedure in isolation. */

    printf("\nYou must re-read the entire geometry\n")
    printf("file to execute geometry().\n\n")
}

